OpenViBE-Scenario
Comment
  0: nothing
  1: left
  2: right
  3: both

Time signal
  Sampling frequency = 250
  Generated epoch sample count = 4

mono_gui
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/python_control_GUI_mono.py
  Sampling frequency = 250
  Generated epoch sample count = 4
  min value = 0
  max value = 4
  window title = mono_gui
-> Simple DSP => #2
  Equation = floor(x)
-> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#2 -> LSL Export (Gipsa)
  Stream name = smile
  Stream type = tobe
